PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DigitSpanTask_PF
  keyboardBackend = ioHub
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Routines
  Routine Presentation
    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_PF)[digitLoop_PF.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answer_box
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if answer_box.text == str(answer_PF):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        El experimento terminó.
        ¡Gracias por participar!
  Routine Lickert
    TextComponent Dificultad
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste la tarea en general?
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    SliderComponent dif_licker
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine Bienvenida
    TextComponent Bienvenida_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@!

        Gracias por participar en nuestro estudio.

        Presiona "barra espaciadora" para ver las instrucciones
    KeyboardComponent key_bienvenida
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent Bienvenida_img
      image = datasets/Bienvenida.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instrucciones
    ImageComponent image
      image [set every repeat] = $instrucciones_pasiva
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine presentation_training
    TextComponent digitpresentation_training
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_trainPF)[train_digitloopPF.thisN]
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  Routine recall_training
    TextComponent recall_train
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answ_train
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent next_train
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code_train
      Code Type = Auto->JS
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      End Routine:
        if answ_train.text == str(answer_trainPF):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent jscode_training
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine first_fixation
    ImageComponent driftPF
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent startPF
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent first_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_PF
      text [set every repeat] = +
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  Routine firstfix_training
    ImageComponent drift_trainPF
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent start_trainPF
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent firstfixtrain
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_trainPF
      text [set every repeat] = +
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  Routine start_trial
    ImageComponent end_training
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Bienvenida
  LoopInitiator instrucloop_PF loopType="TrialHandler"
    conditionsFile = datasets/instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instrucciones_pasiva': 'datasets/instruccion1_pasiva.png', 'instrucciones_activa': 'datasets/instruccion1_activa.png'},
      {'instrucciones_pasiva': 'datasets/instruccion2.png', 'instrucciones_activa': 'datasets/instruccion2.png'},
      {'instrucciones_pasiva': 'datasets/instruccion3.png', 'instrucciones_activa': 'datasets/instruccion3.png'}]
    Routine Instrucciones
  LoopTerminator instrucloop_PF
  LoopInitiator trial_trainingPF loopType="TrialHandler"
    conditionsFile = datasets/training_pf.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_trainPF': 2, 'digits_trainPF': 83, 'fixation_time_trainPF': 0.55, 'answer_trainPF': 38.0},
      {'digitSpan_trainPF': 2, 'digits_trainPF': 16, 'fixation_time_trainPF': 0.55, 'answer_trainPF': 61.0}]
    Routine firstfix_training
    LoopInitiator train_digitloopPF loopType="TrialHandler"
      loopType = random
      nReps = digitSpan_trainPF
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      Routine presentation_training
    LoopTerminator train_digitloopPF
    Routine recall_training
  LoopTerminator trial_trainingPF
  Routine start_trial
  LoopInitiator trial_PF loopType="TrialHandler"
    conditionsFile = datasets/Dataset_PF.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_PF': 3, 'digits_PF': 489.0, 'fixation_time_PF': 0.55, 'answer_PF': 984.0},
      {'digitSpan_PF': 3, 'digits_PF': 235.0, 'fixation_time_PF': 0.55, 'answer_PF': 532.0},
      {'digitSpan_PF': 4, 'digits_PF': 6810.0, 'fixation_time_PF': 0.55, 'answer_PF': 186.0},
      {'digitSpan_PF': 4, 'digits_PF': 3168.0, 'fixation_time_PF': 0.55, 'answer_PF': 8613.0},
      {'digitSpan_PF': 5, 'digits_PF': 81423.0, 'fixation_time_PF': 0.55, 'answer_PF': 32418.0},
      {'digitSpan_PF': 5, 'digits_PF': 90736.0, 'fixation_time_PF': 0.55, 'answer_PF': 63709.0},
      {'digitSpan_PF': 6, 'digits_PF': 153624.0, 'fixation_time_PF': 0.55, 'answer_PF': 426351.0},
      {'digitSpan_PF': 6, 'digits_PF': 819703.0, 'fixation_time_PF': 0.55, 'answer_PF': 307918.0},
      {'digitSpan_PF': 7, 'digits_PF': 1026597.0, 'fixation_time_PF': 0.55, 'answer_PF': 7956201.0},
      {'digitSpan_PF': 7, 'digits_PF': 8765312.0, 'fixation_time_PF': 0.55, 'answer_PF': 2135678.0},
      {'digitSpan_PF': 8, 'digits_PF': 93261458.0, 'fixation_time_PF': 0.55, 'answer_PF': 85416239.0},
      {'digitSpan_PF': 8, 'digits_PF': 50914738.0, 'fixation_time_PF': 0.55, 'answer_PF': 83741905.0},
      {'digitSpan_PF': 9, 'digits_PF': 431962507.0, 'fixation_time_PF': 0.55, 'answer_PF': 705269134.0},
      {'digitSpan_PF': 9, 'digits_PF': 901852346.0, 'fixation_time_PF': 0.55, 'answer_PF': 643258109.0},
      {'digitSpan_PF': 10, 'digits_PF': 1946738052.0, 'fixation_time_PF': 0.55, 'answer_PF': 2508376491.0},
      {'digitSpan_PF': 10, 'digits_PF': 4127509683.0, 'fixation_time_PF': 0.55, 'answer_PF': 3869057214.0}]
    Routine first_fixation
    LoopInitiator digitLoop_PF loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = digitSpan_PF
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      Routine Presentation
    LoopTerminator digitLoop_PF
    Routine Recall
  LoopTerminator trial_PF
  Routine Lickert
  Routine End
