PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DigitSpanTask_AR
  keyboardBackend = ioHub
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Routines
  Routine Presentation
    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_AR)[digitLoop_AR.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answer_box
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if answer_box.text == str(answer_AR):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        El experimento terminó.
        ¡Gracias por participar!
  Routine Lickert
    TextComponent Dificultad
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste la tarea en general?
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    SliderComponent dif_licker
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine Bienvenida
    TextComponent Bienvenida_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@!

        Gracias por participar en nuestro estudio.

        Presiona "barra espaciadora" para ver las instrucciones
    KeyboardComponent key_bienvenida
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent Bienvenida_img
      image = datasets/Bienvenida.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instrucciones
    ImageComponent image
      image [set every repeat] = $instrucciones_activa
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine presentation_training
    TextComponent digitpresentation_training
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_trainAR)[train_digitloopAR.thisN]
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  Routine recall_training
    TextComponent recall_train
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answ_train
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent next_train
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code_train
      Code Type = Auto->JS
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      End Routine:
        if answ_train.text == str(answer_trainAR):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent jscode_training
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine first_fixation
    TextComponent first_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time_AR
      text [set every repeat] = +
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  Routine firstfix_training
    TextComponent firstfixtrain
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time_trainAR
      text [set every repeat] = +
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  Routine start_trial
    ImageComponent end_training
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pre_fixation_train
    SoundComponent start_train
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent drift_train
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent fixation_press_training
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text = +
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    KeyboardComponent activepress_training
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine press_fix
    SoundComponent start_AR
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent drift_AR
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent press_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text = +
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    KeyboardComponent active_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine Bienvenida
  LoopInitiator instrucloop loopType="TrialHandler"
    conditionsFile = datasets/instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instrucciones_pasiva': 'instruccion1_pasiva.png', 'instrucciones_activa': 'instruccion1_activa.png'},
      {'instrucciones_pasiva': 'instruccion2.png', 'instrucciones_activa': 'instruccion2.png'},
      {'instrucciones_pasiva': 'instruccion3.png', 'instrucciones_activa': 'instruccion3.png'}]
    Routine Instrucciones
  LoopTerminator instrucloop
  LoopInitiator trial_trainingAR loopType="TrialHandler"
    conditionsFile = datasets/training_ar.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_trainAR': 2, 'digits_trainAR': 25, 'fixation_time_trainAR': 0.75, 'answer_trainAR': 25},
      {'digitSpan_trainAR': 2, 'digits_trainAR': 60, 'fixation_time_trainAR': 0.35, 'answer_trainAR': 6.0}]
    Routine pre_fixation_train
    Routine firstfix_training
    LoopInitiator train_digitloopAR loopType="TrialHandler"
      loopType = sequential
      nReps = digitSpan_trainAR
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      Routine presentation_training
    LoopTerminator train_digitloopAR
    Routine recall_training
  LoopTerminator trial_trainingAR
  Routine start_trial
  LoopInitiator trial_AR loopType="TrialHandler"
    conditionsFile = datasets/Dataset_AR.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_AR': 3, 'digits_AR': 349, 'fixation_time_AR': 0.15, 'answer_AR': 943},
      {'digitSpan_AR': 3, 'digits_AR': 256.0, 'fixation_time_AR': 0.95, 'answer_AR': 652.0},
      {'digitSpan_AR': 4, 'digits_AR': 1520.0, 'fixation_time_AR': 0.35, 'answer_AR': 251.0},
      {'digitSpan_AR': 4, 'digits_AR': 3769.0, 'fixation_time_AR': 0.55, 'answer_AR': 9673.0},
      {'digitSpan_AR': 5, 'digits_AR': 80734.0, 'fixation_time_AR': 0.95, 'answer_AR': 43708.0},
      {'digitSpan_AR': 5, 'digits_AR': 23569.0, 'fixation_time_AR': 0.35, 'answer_AR': 96532.0},
      {'digitSpan_AR': 6, 'digits_AR': 741802.0, 'fixation_time_AR': 0.55, 'answer_AR': 208147.0},
      {'digitSpan_AR': 6, 'digits_AR': 956374.0, 'fixation_time_AR': 0.95, 'answer_AR': 473659.0},
      {'digitSpan_AR': 7, 'digits_AR': 1032645.0, 'fixation_time_AR': 0.75, 'answer_AR': 5462301.0},
      {'digitSpan_AR': 7, 'digits_AR': 6754102.0, 'fixation_time_AR': 0.15, 'answer_AR': 2014576.0},
      {'digitSpan_AR': 8, 'digits_AR': 30921867.0, 'fixation_time_AR': 0.95, 'answer_AR': 76812903.0},
      {'digitSpan_AR': 8, 'digits_AR': 96528340.0, 'fixation_time_AR': 0.55, 'answer_AR': 4382569.0},
      {'digitSpan_AR': 9, 'digits_AR': 305679148.0, 'fixation_time_AR': 0.35, 'answer_AR': 841976503.0},
      {'digitSpan_AR': 9, 'digits_AR': 805734129.0, 'fixation_time_AR': 0.15, 'answer_AR': 921437508.0},
      {'digitSpan_AR': 10, 'digits_AR': 9147256083.0, 'fixation_time_AR': 0.75, 'answer_AR': 3806527419.0},
      {'digitSpan_AR': 10, 'digits_AR': 1972506384.0, 'fixation_time_AR': 0.35, 'answer_AR': 4836052791.0}]
    Routine press_fix
    Routine first_fixation
    LoopInitiator digitLoop_AR loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = digitSpan_AR
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      Routine Presentation
    LoopTerminator digitLoop_AR
    Routine Recall
  LoopTerminator trial_AR
  Routine Lickert
  Routine End
