PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DigitSpanTask_PR2
  keyboardBackend = ioHub
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Routines
  Routine Presentation
    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_PR)[digitLoop_PR.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answer_box
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #counters of correct answers
        previous_count = 0
        current_count = 0
      Begin Routine:
        answer_PR=int(answer_PR)
      Each Frame:
        if defaultKeyboard.getKeys(keyList=["return"]): #end routine when return is typed
            answer_box.text = answer_box.text.rstrip() #deletes return from answer
            if answer_box.text == str(answer_PR): #if correct
                correct = 1
            else:
                correct = 0
            trial_trainingPR.addData('correct', correct)
            continueRoutine = False #ends routine
      End Routine:
        ###trial 1 or 2 (span 3)
        if  trial_PR.thisTrialN == 0 or trial_PR.thisTrialN == 1:
            if correct == 1: #if trial 1
                previous_count += 1
                print(f' trial = {trial_PR.thisTrialN} previous_count = {previous_count}')

        ###trial 3 or 4 (span 4)
        elif trial_PR.thisTrialN == 2 or trial_PR.thisTrialN == 3:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_PR.thisTrialN} current_count = {current_count}')
        if trial_PR.thisTrialN == 3:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'trial = {trial_PR.thisTrialN} parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_PR.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 5 or 6 (span 5)
        elif trial_PR.thisTrialN == 4 or trial_PR.thisTrialN == 5:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_PR.thisTrialN} current_count = {current_count}')
        if trial_PR.thisTrialN == 5:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_PR.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 7 or 8 (span 6)
        elif trial_PR.thisTrialN == 6 or trial_PR.thisTrialN == 7:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_PR.thisTrialN} current_count = {current_count}')
        if trial_PR.thisTrialN == 7:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_PR.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 9 or 10 (span 7)
        elif trial_PR.thisTrialN == 8 or trial_PR.thisTrialN == 9:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_PR.thisTrialN} current_count = {current_count}')
        if trial_PR.thisTrialN == 9:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_PR.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 11 or 12 (span 8)
        elif trial_PR.thisTrialN == 10 or trial_PR.thisTrialN == 11:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_PR.thisTrialN} current_count = {current_count}')
        if trial_PR.thisTrialN == 11:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_PR.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 13 or 14 (span 9)
        elif trial_PR.thisTrialN == 12 or trial_PR.thisTrialN == 13:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_PR.thisTrialN} current_count = {current_count}')
        if trial_PR.thisTrialN == 13:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_PR.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 16 (span 10)
        #elif trial_PR.thisTrialN == 15:
        #    continueRoutine = False
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Esta prueba terminó.

        Llevamos 1 de 4 pruebas.

        Continuaremos con la siguiente.
  Routine Lickert
    TextComponent Dificultad
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste la tarea en general?
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    SliderComponent dif_licker
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine Bienvenida
    KeyboardComponent key_bienvenida
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent Bienvenida_img
      image = datasets/Bienvenida.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine presentation_training
    TextComponent digitpresentation_training
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_trainPR)[train_digitloopPR.thisN]
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  Routine recall_training
    TextComponent recall_train
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answ_train
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code_train
      Code Type = Auto->JS
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      Begin Routine:
        answer_trainPR=int(answer_trainPR)
      Each Frame:
        if defaultKeyboard.getKeys(keyList=["return"]):
            answ_train.text = answ_train.text.rstrip()
            if answ_train.text == str(answer_trainPR):
                correct = 1
                fbTxt = 'Correct!'
            else:
                correct = 0
                fbTxt = 'Incorrect'
            thisExp.addData('correct', correct)
            continueRoutine = False
    CodeComponent jscode_training
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine first_fixation
    ImageComponent driftPR
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent startPR
      saveStartStop = False
      sound = datasets/trial_init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent first_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_PR
      text [set every repeat] = +
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  Routine firstfix_training
    ImageComponent drift_trainPR
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent start_trainPR
      saveStartStop = False
      sound = datasets/trial_init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent firstfixtrain
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_trainPR
      text [set every repeat] = +
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  Routine start_trial
    ImageComponent end_training
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent inicia_variable_parartrial
      Code Type = Auto->JS
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      End Routine:
        parar_el_trial = False
  Routine post_recall_train
    TextComponent post_recall_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine post_recallPR
    TextComponent postrecallPR
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_endtask
      Code Type = Auto->JS
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      End Routine:
        if parar_el_trial:
            trial_PR.finished = True
  Routine InstruccionesPR
    ImageComponent image2
      image [set every repeat] = $instrucciones_pasiva
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr_PF
    ImageComponent image2_2
      image [set every repeat] = $instrucciones_pasiva
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine firstfix_trainPF
    ImageComponent drift_trainPR_2
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent start_trainPR_2
      saveStartStop = False
      sound = datasets/trial_init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent firstfixtrain_2
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_trainPR
      text [set every repeat] = +
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  Routine present_train_PF
    TextComponent digitpresentation_training_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_trainPR)[train_digitloopPR.thisN]
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  Routine recall_trainPF
    TextComponent recall_train_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answ_train_2
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code_train_2
      Code Type = Auto->JS
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      Begin Routine:
        answer_trainPR=int(answer_trainPR)
      Each Frame:
        if defaultKeyboard.getKeys(keyList=["return"]):
            answ_train.text = answ_train.text.rstrip()
            if answ_train.text == str(answer_trainPR):
                correct = 1
                fbTxt = 'Correct!'
            else:
                correct = 0
                fbTxt = 'Incorrect'
            thisExp.addData('correct', correct)
            continueRoutine = False
    CodeComponent jscode_training_2
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine post_recall_train_PF
    TextComponent post_recall_training_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine start_trialPF
    ImageComponent end_training_2
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent inicia_variable_parartrial_2
      Code Type = Auto->JS
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      End Routine:
        parar_el_trial = False
  Routine first_fixPF
    ImageComponent driftPR_2
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent startPR_2
      saveStartStop = False
      sound = datasets/trial_init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent first_fix_2
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_PR
      text [set every repeat] = +
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  Routine PresentationPF
    TextComponent pres_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_PR)[digitLoop_PR.thisN]
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  Routine RecallPF
    TextComponent recall_txt_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answer_box_2
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        #counters of correct answers
        previous_count = 0
        current_count = 0
      Begin Routine:
        answer_PR=int(answer_PR)
      Each Frame:
        if defaultKeyboard.getKeys(keyList=["return"]): #end routine when return is typed
            answer_box.text = answer_box.text.rstrip() #deletes return from answer
            if answer_box.text == str(answer_PR): #if correct
                correct = 1
            else:
                correct = 0
            trial_trainingPR.addData('correct', correct)
            continueRoutine = False #ends routine
      End Routine:
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    CodeComponent JScode_2
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine post_recallPF
    TextComponent postrecallPR_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_endtask_2
      Code Type = Auto->JS
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      End Routine:
        if parar_el_trial:
            trial_PR.finished = True
  Routine LickertPF
    TextComponent Dificultad_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste la tarea en general?
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    SliderComponent dif_licker_2
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine EndPF
    TextComponent thank_you_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Esta prueba terminó.

        Llevamos 2 de 4 pruebas.

        Continuaremos con la siguiente.
Flow
  Routine Bienvenida
  LoopInitiator instrucloop_PR loopType="TrialHandler"
    conditionsFile = datasets/instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instrucciones_pasiva': 'datasets/instruccion1_pasiva.png', 'instrucciones_activa': 'datasets/instruccion1_activa.png'},
      {'instrucciones_pasiva': 'datasets/instruccion2.png', 'instrucciones_activa': 'datasets/instruccion2.png'},
      {'instrucciones_pasiva': 'datasets/instruccion3.png', 'instrucciones_activa': 'datasets/instruccion3.png'}]
    Routine InstruccionesPR
  LoopTerminator instrucloop_PR
  LoopInitiator trial_trainingPR loopType="TrialHandler"
    conditionsFile = datasets/training_pr.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_trainPR': 2, 'digits_trainPR': 80, 'fixation_time_trainPR': 0.75, 'answer_trainPR': 8.0},
      {'digitSpan_trainPR': 2, 'digits_trainPR': 72, 'fixation_time_trainPR': 0.35, 'answer_trainPR': 27.0}]
    Routine firstfix_training
    LoopInitiator train_digitloopPR loopType="TrialHandler"
      loopType = sequential
      nReps = digitSpan_trainPR
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      Routine presentation_training
    LoopTerminator train_digitloopPR
    Routine recall_training
    Routine post_recall_train
  LoopTerminator trial_trainingPR
  Routine start_trial
  LoopInitiator trial_PR loopType="TrialHandler"
    conditionsFile = datasets/Dataset_PR.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_PR': 3, 'digits_PR': 279.0, 'fixation_time_PR': 0.15, 'answer_PR': 972.0},
      {'digitSpan_PR': 3, 'digits_PR': 148.0, 'fixation_time_PR': 0.95, 'answer_PR': 841.0},
      {'digitSpan_PR': 4, 'digits_PR': 1652.0, 'fixation_time_PR': 0.35, 'answer_PR': 2561.0},
      {'digitSpan_PR': 4, 'digits_PR': 7093.0, 'fixation_time_PR': 0.55, 'answer_PR': 3907.0},
      {'digitSpan_PR': 5, 'digits_PR': 10256.0, 'fixation_time_PR': 0.95, 'answer_PR': 65201.0},
      {'digitSpan_PR': 5, 'digits_PR': 47319.0, 'fixation_time_PR': 0.35, 'answer_PR': 91374.0},
      {'digitSpan_PR': 6, 'digits_PR': 982506.0, 'fixation_time_PR': 0.55, 'answer_PR': 605289.0},
      {'digitSpan_PR': 6, 'digits_PR': 314795.0, 'fixation_time_PR': 0.95, 'answer_PR': 597413.0},
      {'digitSpan_PR': 7, 'digits_PR': 9721435.0, 'fixation_time_PR': 0.75, 'answer_PR': 5341279.0},
      {'digitSpan_PR': 7, 'digits_PR': 8975204.0, 'fixation_time_PR': 0.15, 'answer_PR': 4025798.0},
      {'digitSpan_PR': 8, 'digits_PR': 84591270.0, 'fixation_time_PR': 0.95, 'answer_PR': 7219548.0},
      {'digitSpan_PR': 8, 'digits_PR': 40981637.0, 'fixation_time_PR': 0.55, 'answer_PR': 73618904.0},
      {'digitSpan_PR': 9, 'digits_PR': 219405638.0, 'fixation_time_PR': 0.35, 'answer_PR': 836504912.0},
      {'digitSpan_PR': 9, 'digits_PR': 395208647.0, 'fixation_time_PR': 0.15, 'answer_PR': 746802593.0},
      {'digitSpan_PR': 10, 'digits_PR': 5087243691.0, 'fixation_time_PR': 0.75, 'answer_PR': 1963427805.0},
      {'digitSpan_PR': 10, 'digits_PR': 6182975340.0, 'fixation_time_PR': 0.35, 'answer_PR': 435792816.0}]
    Routine first_fixation
    LoopInitiator digitLoop_PR loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = digitSpan_PR
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      Routine Presentation
    LoopTerminator digitLoop_PR
    Routine Recall
    Routine post_recallPR
  LoopTerminator trial_PR
  Routine Lickert
  Routine End
  LoopInitiator intrLoopPF loopType="TrialHandler"
    conditionsFile = datasets/instructions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'instrucciones_pasiva': 'datasets/instruccion1_pasiva.png', 'instrucciones_activa': 'datasets/instruccion1_activa.png'},
      {'instrucciones_pasiva': 'datasets/instruccion2.png', 'instrucciones_activa': 'datasets/instruccion2.png'},
      {'instrucciones_pasiva': 'datasets/instruccion3.png', 'instrucciones_activa': 'datasets/instruccion3.png'}]
    Routine Instr_PF
  LoopTerminator intrLoopPF
  LoopInitiator trial_train_PF loopType="TrialHandler"
    conditionsFile = datasets/training_pf.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_trainPF': 2, 'digits_trainPF': 83, 'fixation_time_trainPF': 0.55, 'answer_trainPF': 38.0},
      {'digitSpan_trainPF': 2, 'digits_trainPF': 16, 'fixation_time_trainPF': 0.55, 'answer_trainPF': 61.0}]
    Routine firstfix_trainPF
    LoopInitiator train_digitloop_PR loopType="TrialHandler"
      loopType = sequential
      nReps = digitSpan_trainPF
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      Routine present_train_PF
    LoopTerminator train_digitloop_PR
    Routine recall_trainPF
    Routine post_recall_train_PF
  LoopTerminator trial_train_PF
  Routine start_trialPF
  LoopInitiator trialPF loopType="TrialHandler"
    conditionsFile = datasets/Dataset_PF.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_PF': 3, 'digits_PF': 497.0, 'fixation_time_PF': 0.55, 'answer_PF': 794.0},
      {'digitSpan_PF': 3, 'digits_PF': 235.0, 'fixation_time_PF': 0.55, 'answer_PF': 532.0},
      {'digitSpan_PF': 4, 'digits_PF': 6081.0, 'fixation_time_PF': 0.55, 'answer_PF': 1806.0},
      {'digitSpan_PF': 4, 'digits_PF': 3168.0, 'fixation_time_PF': 0.55, 'answer_PF': 8613.0},
      {'digitSpan_PF': 5, 'digits_PF': 81423.0, 'fixation_time_PF': 0.55, 'answer_PF': 32418.0},
      {'digitSpan_PF': 5, 'digits_PF': 90736.0, 'fixation_time_PF': 0.55, 'answer_PF': 63709.0},
      {'digitSpan_PF': 6, 'digits_PF': 153624.0, 'fixation_time_PF': 0.55, 'answer_PF': 426351.0},
      {'digitSpan_PF': 6, 'digits_PF': 819703.0, 'fixation_time_PF': 0.55, 'answer_PF': 307918.0},
      {'digitSpan_PF': 7, 'digits_PF': 1026597.0, 'fixation_time_PF': 0.55, 'answer_PF': 7956201.0},
      {'digitSpan_PF': 7, 'digits_PF': 8765312.0, 'fixation_time_PF': 0.55, 'answer_PF': 2135678.0},
      {'digitSpan_PF': 8, 'digits_PF': 93261458.0, 'fixation_time_PF': 0.55, 'answer_PF': 85416239.0},
      {'digitSpan_PF': 8, 'digits_PF': 50914738.0, 'fixation_time_PF': 0.55, 'answer_PF': 83741905.0},
      {'digitSpan_PF': 9, 'digits_PF': 431962507.0, 'fixation_time_PF': 0.55, 'answer_PF': 705269134.0},
      {'digitSpan_PF': 9, 'digits_PF': 901852346.0, 'fixation_time_PF': 0.55, 'answer_PF': 643258109.0},
      {'digitSpan_PF': 10, 'digits_PF': 1946738052.0, 'fixation_time_PF': 0.55, 'answer_PF': 2508376491.0},
      {'digitSpan_PF': 10, 'digits_PF': 4127509683.0, 'fixation_time_PF': 0.55, 'answer_PF': 3869057214.0}]
    Routine first_fixPF
    LoopInitiator digitLoop_PF loopType="TrialHandler"
      loopType = random
      nReps = digitSpan_PF
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      Routine PresentationPF
    LoopTerminator digitLoop_PF
    Routine RecallPF
    Routine post_recallPF
  LoopTerminator trialPF
  Routine LickertPF
  Routine EndPF
