PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DigitSpanTask_AF
  keyboardBackend = ioHub
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Routines
  Routine Presentation
    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_AF)[digitLoop_AF.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answer_box
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if answer_box.text == str(answer_AF):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        El experimento terminó.
        ¡Gracias por participar!
  Routine Lickert
    TextComponent Dificultad
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste la tarea en general?
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    SliderComponent dif_licker
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine Bienvenida
    TextComponent Bienvenida_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@!

        Gracias por participar en nuestro estudio.

        Presiona "barra espaciadora" para ver las instrucciones
    KeyboardComponent key_bienvenida
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent Bienvenida_img
      image = datasets/Bienvenida.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instrucciones
    ImageComponent image
      image [set every repeat] = $instrucciones_activa
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine presentation_training
    TextComponent cross_train
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = +
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    TextComponent digitpresentation_training
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_trainAF)[train_digitloopAF.thisN]
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  Routine recall_training
    TextComponent recall_train
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answ_train
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent next_train
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code_train
      Code Type = Auto->JS
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      End Routine:
        if answ_train.text == str(answer_trainAF):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent jscode_training
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine first_fixation
    TextComponent first_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time_AF
      text [set every repeat] = +
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  Routine firstfix_training
    TextComponent firstfixtrain
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time_trainAF
      text [set every repeat] = +
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  Routine start_trial
    ImageComponent end_training
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pre_fixation_train
    SoundComponent start_train
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent drift_train
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent fixation_press_training
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text = +
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    KeyboardComponent activepress_training
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine press_fix
    SoundComponent start_AF
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent drift_AF
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent press_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text = +
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    KeyboardComponent active_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine Bienvenida
  LoopInitiator instrucloop loopType="TrialHandler"
    conditionsFile = datasets/instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instrucciones_pasiva': 'datasets/instruccion1_pasiva.png', 'instrucciones_activa': 'datasets/instruccion1_activa.png'},
      {'instrucciones_pasiva': 'datasets/instruccion2.png', 'instrucciones_activa': 'datasets/instruccion2.png'},
      {'instrucciones_pasiva': 'datasets/instruccion3.png', 'instrucciones_activa': 'datasets/instruccion3.png'}]
    Routine Instrucciones
  LoopTerminator instrucloop
  LoopInitiator trial_trainingAF loopType="TrialHandler"
    conditionsFile = datasets/training_af.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_trainAF': 2, 'digits_trainAF': 91, 'fixation_time_trainAF': 0.55, 'answer_trainAF': 19},
      {'digitSpan_trainAF': 2, 'digits_trainAF': 47, 'fixation_time_trainAF': 0.55, 'answer_trainAF': 74}]
    Routine pre_fixation_train
    Routine firstfix_training
    LoopInitiator train_digitloopAF loopType="TrialHandler"
      loopType = random
      nReps = digitSpan_trainAF
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      Routine presentation_training
    LoopTerminator train_digitloopAF
    Routine recall_training
  LoopTerminator trial_trainingAF
  Routine start_trial
  LoopInitiator trial_AF loopType="TrialHandler"
    conditionsFile = datasets/Dataset_AF.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_AF': 3, 'digits_AF': 385.0, 'fixation_time_AF': 0.55, 'answer_AF': 583.0},
      {'digitSpan_AF': 3, 'digits_AF': 294.0, 'fixation_time_AF': 0.55, 'answer_AF': 492.0},
      {'digitSpan_AF': 4, 'digits_AF': 1358.0, 'fixation_time_AF': 0.55, 'answer_AF': 8531.0},
      {'digitSpan_AF': 4, 'digits_AF': 2047.0, 'fixation_time_AF': 0.55, 'answer_AF': 7402.0},
      {'digitSpan_AF': 5, 'digits_AF': 15396.0, 'fixation_time_AF': 0.55, 'answer_AF': 69351.0},
      {'digitSpan_AF': 5, 'digits_AF': 90761.0, 'fixation_time_AF': 0.55, 'answer_AF': 16709.0},
      {'digitSpan_AF': 6, 'digits_AF': 835420.0, 'fixation_time_AF': 0.55, 'answer_AF': 24538.0},
      {'digitSpan_AF': 6, 'digits_AF': 615739.0, 'fixation_time_AF': 0.55, 'answer_AF': 937516.0},
      {'digitSpan_AF': 7, 'digits_AF': 1032458.0, 'fixation_time_AF': 0.55, 'answer_AF': 8542301.0},
      {'digitSpan_AF': 7, 'digits_AF': 7864201.0, 'fixation_time_AF': 0.55, 'answer_AF': 1024687.0},
      {'digitSpan_AF': 8, 'digits_AF': 98614052.0, 'fixation_time_AF': 0.55, 'answer_AF': 25041689.0},
      {'digitSpan_AF': 8, 'digits_AF': 85370192.0, 'fixation_time_AF': 0.55, 'answer_AF': 29107358.0},
      {'digitSpan_AF': 9, 'digits_AF': 914725608.0, 'fixation_time_AF': 0.55, 'answer_AF': 806527419.0},
      {'digitSpan_AF': 9, 'digits_AF': 807243561.0, 'fixation_time_AF': 0.55, 'answer_AF': 165342708.0},
      {'digitSpan_AF': 10, 'digits_AF': 4319625078.0, 'fixation_time_AF': 0.55, 'answer_AF': 8705269134.0},
      {'digitSpan_AF': 10, 'digits_AF': 6172385409.0, 'fixation_time_AF': 0.55, 'answer_AF': 9045832716.0}]
    Routine press_fix
    Routine first_fixation
    LoopInitiator digitLoop_AF loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = digitSpan_AF
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      Routine Presentation
    LoopTerminator digitLoop_AF
    Routine Recall
  LoopTerminator trial_AF
  Routine Lickert
  Routine End
