PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DigitSpanTask_PR
  keyboardBackend = ioHub
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Routines
  Routine Presentation
    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_PR)[digitLoop_PR.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answer_box
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if answer_box.text == str(answer_PR):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        El experimento terminó.
        ¡Gracias por participar!
  Routine Lickert
    TextComponent Dificultad
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste la tarea en general?
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    SliderComponent dif_licker
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine Bienvenida
    TextComponent Bienvenida_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@!

        Gracias por participar en nuestro estudio.

        Presiona "barra espaciadora" para ver las instrucciones
    KeyboardComponent key_bienvenida
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent Bienvenida_img
      image = datasets/Bienvenida.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instrucciones
    ImageComponent image
      image [set every repeat] = $instrucciones_pasiva
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine presentation_training
    TextComponent digitpresentation_training
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_trainPR)[train_digitloopPR.thisN]
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  Routine recall_training
    TextComponent recall_train
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent answ_train
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent next_train
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code_train
      Code Type = Auto->JS
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      End Routine:
        if answ_train.text == str(answer_trainPR):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent jscode_training
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine first_fixation
    ImageComponent driftPR
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent startPR
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent first_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_PR
      text [set every repeat] = +
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  Routine firstfix_training
    ImageComponent drift_trainPR
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent start_trainPR
      saveStartStop = False
      sound = datasets/microwave-beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent firstfixtrain
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_trainPR
      text [set every repeat] = +
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  Routine start_trial
    ImageComponent end_training
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Bienvenida
  LoopInitiator instrucloop_PR loopType="TrialHandler"
    conditionsFile = datasets/instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instrucciones_pasiva': 'datasets/instruccion1_pasiva.png', 'instrucciones_activa': 'datasets/instruccion1_activa.png'},
      {'instrucciones_pasiva': 'datasets/instruccion2.png', 'instrucciones_activa': 'datasets/instruccion2.png'},
      {'instrucciones_pasiva': 'datasets/instruccion3.png', 'instrucciones_activa': 'datasets/instruccion3.png'}]
    Routine Instrucciones
  LoopTerminator instrucloop_PR
  LoopInitiator trial_trainingPR loopType="TrialHandler"
    conditionsFile = datasets/training_pr.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_trainPR': 2, 'digits_trainPR': 80, 'fixation_time_trainPR': 0.75, 'answer_trainPR': 8.0},
      {'digitSpan_trainPR': 2, 'digits_trainPR': 72, 'fixation_time_trainPR': 0.35, 'answer_trainPR': 27.0}]
    Routine firstfix_training
    LoopInitiator train_digitloopPR loopType="TrialHandler"
      loopType = random
      nReps = digitSpan_trainPR
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      Routine presentation_training
    LoopTerminator train_digitloopPR
    Routine recall_training
  LoopTerminator trial_trainingPR
  Routine start_trial
  LoopInitiator trial_PR loopType="TrialHandler"
    conditionsFile = datasets/Dataset_PR.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan_PR': 3, 'digits_PR': 279.0, 'fixation_time_PR': 0.15, 'answer_PR': 972.0},
      {'digitSpan_PR': 3, 'digits_PR': 148.0, 'fixation_time_PR': 0.95, 'answer_PR': 841.0},
      {'digitSpan_PR': 4, 'digits_PR': 1652.0, 'fixation_time_PR': 0.35, 'answer_PR': 2561.0},
      {'digitSpan_PR': 4, 'digits_PR': 7093.0, 'fixation_time_PR': 0.55, 'answer_PR': 3907.0},
      {'digitSpan_PR': 5, 'digits_PR': 10256.0, 'fixation_time_PR': 0.95, 'answer_PR': 65201.0},
      {'digitSpan_PR': 5, 'digits_PR': 47319.0, 'fixation_time_PR': 0.35, 'answer_PR': 91374.0},
      {'digitSpan_PR': 6, 'digits_PR': 982506.0, 'fixation_time_PR': 0.55, 'answer_PR': 605289.0},
      {'digitSpan_PR': 6, 'digits_PR': 314795.0, 'fixation_time_PR': 0.95, 'answer_PR': 597413.0},
      {'digitSpan_PR': 7, 'digits_PR': 9721435.0, 'fixation_time_PR': 0.75, 'answer_PR': 5341279.0},
      {'digitSpan_PR': 7, 'digits_PR': 8975204.0, 'fixation_time_PR': 0.15, 'answer_PR': 4025798.0},
      {'digitSpan_PR': 8, 'digits_PR': 84591270.0, 'fixation_time_PR': 0.95, 'answer_PR': 7219548.0},
      {'digitSpan_PR': 8, 'digits_PR': 40981637.0, 'fixation_time_PR': 0.55, 'answer_PR': 73618904.0},
      {'digitSpan_PR': 9, 'digits_PR': 219405638.0, 'fixation_time_PR': 0.35, 'answer_PR': 836504912.0},
      {'digitSpan_PR': 9, 'digits_PR': 395208647.0, 'fixation_time_PR': 0.15, 'answer_PR': 746802593.0},
      {'digitSpan_PR': 10, 'digits_PR': 5087243691.0, 'fixation_time_PR': 0.75, 'answer_PR': 1963427805.0},
      {'digitSpan_PR': 10, 'digits_PR': 6182975340.0, 'fixation_time_PR': 0.35, 'answer_PR': 435792816.0}]
    Routine first_fixation
    LoopInitiator digitLoop_PR loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = digitSpan_PR
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      Routine Presentation
    LoopTerminator digitLoop_PR
    Routine Recall
  LoopTerminator trial_PR
  Routine Lickert
  Routine End
