PsychoPy2experiment version="2022.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': '', 'sesion': '01', 'orden': "['AP','PA']", 'pasivas': "['RF','FR']", 'activas': "['RF','FR']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['datasets/Dataset_AF.xlsx', 'datasets/Dataset_AR.xlsx', 'datasets/Dataset_PF.xlsx', 'datasets/Dataset_PR.xlsx', 'datasets/instructions.xlsx', 'datasets/task_order.xlsx', 'datasets/training_AF.xlsx', 'datasets/training_AR.xlsx', 'datasets/training_PF.xlsx', 'datasets/training_PR.xlsx', 'datasets/Bienvenida.png', 'datasets/drift.png', 'datasets/finpractica.png', 'datasets/instruccion1_activa.png', 'datasets/instruccion1_pasiva.png', 'datasets/instruccion2.png', 'datasets/instruccion3.png', 'datasets/trial_init.wav']
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DigitSpanTask_visual
  keyboardBackend = ioHub
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Routines
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine Bienvenida
    KeyboardComponent key_bienvenida
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
      syncScreenRefresh = False
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    ImageComponent Bienvenida_img
      image = datasets/Bienvenida.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent task_order
      Code Type = Auto->JS
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      Before Experiment:
        if len(_answ_key_train_allKeys):
            for key in _answ_key_train_allKeys:
                if key.name[0]=="n":
                    key.name=key.name[4:]
                print(f'keyname: {key.name}')
      Begin Experiment:
        if expInfo['activas']== 'RF':
            ordenactivas=('AR', 'AF')
        else:
            ordenactivas=('AF', 'AR')

        if expInfo['pasivas']== 'RF':
            ordenpasivas=('PR', 'PF')
        else:
            ordenpasivas=('PF', 'PR')

        if expInfo['orden']== 'AP': #activa primero
            lasfilas=[0,1]
        else: # PA pasiva primero
            lasfilas=[1,2]
  Routine presentation_training
    TextComponent digitpresentation_training
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $str(digits_train)[train_digitloopPasivas.thisN]
  Routine recall_training
    TextComponent recall_train
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextComponent screentext_train
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $screen_text_train
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    KeyboardComponent answ_key_train
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_train
      Code Type = Auto->JS
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      Begin Routine:
        screen_text_train = ''
        larespuesta = ''
        answer_train_pasivas=int(answer_train)
      Each Frame:
        screen_text_train = ''.join(answ_key_train.keys)

        if ("return" in answ_key_train.keys):
            answ_key_train.keys.remove("return")
            larespuesta = ''.join(map(str,answ_key_train.keys))
            print(larespuesta)

            if larespuesta == str(answer_train_pasivas):
                correct = 1
            else:
                correct = 0
            thisExp.addData('correct', correct)
            thisExp.addData("recall", larespuesta)
            continueRoutine = False
  Routine first_fixation
    ImageComponent driftPR
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent startPR
      saveStartStop = False
      sound = datasets/trial_init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent first_fix_pas
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time
      text [set every repeat] = +
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  Routine firstfix_training
    ImageComponent drift_trainPR
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent start_trainPR
      saveStartStop = False
      sound = datasets/trial_init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent firstfixtrain
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $fixation_time_train
      text [set every repeat] = +
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  Routine start_trial
    ImageComponent end_training
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    CodeComponent inicia_variable_parartrial
      Code Type = Auto->JS
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      End Routine:
        parar_el_trial = False
  Routine post_recall_train
    CodeComponent feedbackcode
      Code Type = Auto->JS
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      Begin Routine:
        if correct==0:
            feedbackpas= f'la respuesta correcta era {answer_train_pasivas}'
        else:
            feedbackpas= f'Tu respuesta es correcta'
    TextComponent post_recall_training
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackpas
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  Routine Instr_Activas
    ImageComponent image2_2
      image [set every repeat] = $instrucciones_activa
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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  Routine InstruccionesPasiva
    ImageComponent image2
      image [set every repeat] = $instrucciones_pasiva
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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  Routine present_train_activas
    TextComponent digitpresentation_training_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $str(digits_train)[train_digitloop_Activas.thisN]
  Routine recall_train_activas
    TextComponent recall_train_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextComponent screentext_train_act
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $screen_text_train
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    KeyboardComponent answ_key_train2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent correct_counter_active
      Code Type = Auto->JS
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      Begin Routine:
        screen_text_train = ''
        larespuesta = ''
        answer_train_activas=int(answer_train)
      Each Frame:
        screen_text_train = ''.join(answ_key_train2.keys)

        if("return" in answ_key_train2.keys):
            answ_key_train2.keys.remove("return")
            larespuesta = ''.join(map(str,answ_key_train2.keys))
            print(larespuesta)
            if larespuesta == str(answer_train_activas):
                correct = 1
            else:
                correct = 0
            thisExp.addData('correct', correct)
            thisExp.addData("recall", larespuesta)
            continueRoutine = False
  Routine post_recall_train_activas
    CodeComponent feedback_traincode
      Code Type = Auto->JS
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      Begin Routine:
        if correct==0:
            feedbackact= f'la respuesta correcta era {answer_train_activas}'
        else:
            feedbackact= f'Tu respuesta es correcta'
    TextComponent post_recall_training_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackact
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  Routine start_trialActivas
    ImageComponent end_training_2
      image = datasets/finpractica.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent inicia_variable_parartrial_2
      Code Type = Auto->JS
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      End Routine:
        parar_el_trial = False
        previous_count = 0
        current_count = 0
  Routine first_fixActivas
    TextComponent first_fix_active
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time
      text [set every repeat] = +
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  Routine PresentationActivas
    TextComponent pres_text_active
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $str(digits)[digitLoop_Activas.thisN]
  Routine RecallActivas
    TextComponent recall_txt_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    KeyboardComponent answ_key2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent screen_text_act
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $screen_text
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    CodeComponent end_trials_active
      Code Type = Auto->JS
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      Begin Routine:
        #counters of correct answers
        answer_active=int(answer)
        larespuesta = ''
        screen_text = ''
      Each Frame:
        screen_text = ''.join(answ_key2.keys)

        if("return" in answ_key2.keys):  #end routine when return is typed
            answ_key2.keys.remove("return") #deletes return from answer
            larespuesta = ''.join(map(str,answ_key2.keys))
            print(larespuesta)
            if larespuesta == str(answer_active): #if correct
                correct = 1
            else:
                correct = 0
            thisExp.addData('correct', correct)
            thisExp.addData("recall", larespuesta)
            continueRoutine = False #ends routine
      End Routine:
        ###trial 1 or 2 (span 3)
        if  trialActivas.thisTrialN == 0 or trialActivas.thisTrialN == 1:
            if correct == 1: #if trial 1
                previous_count += 1
                print(f' trial = {trialActivas.thisTrialN} previous_count = {previous_count}')

        ###trial 3 or 4 (span 4)
        elif trialActivas.thisTrialN == 2 or trialActivas.thisTrialN == 3:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trialActivas.thisTrialN} current_count = {current_count}')
        if trialActivas.thisTrialN == 3:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'trial = {trialActivas.thisTrialN} parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trialActivas.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 5 or 6 (span 5)
        elif trialActivas.thisTrialN == 4 or trialActivas.thisTrialN == 5:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trialActivas.thisTrialN} current_count = {current_count}')
        if trialActivas.thisTrialN == 5:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trialActivas.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 7 or 8 (span 6)
        elif trialActivas.thisTrialN == 6 or trialActivas.thisTrialN == 7:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trialActivas.thisTrialN} current_count = {current_count}')
        if trialActivas.thisTrialN == 7:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trialActivas.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 9 or 10 (span 7)
        elif trialActivas.thisTrialN == 8 or trialActivas.thisTrialN == 9:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trialActivas.thisTrialN} current_count = {current_count}')
        if trialActivas.thisTrialN == 9:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trialActivas.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 11 or 12 (span 8)
        elif trialActivas.thisTrialN == 10 or trialActivas.thisTrialN == 11:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trialActivas.thisTrialN} current_count = {current_count}')
        if trialActivas.thisTrialN == 11:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trialActivas.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 13 or 14 (span 9)
        elif trialActivas.thisTrialN == 12 or trialActivas.thisTrialN == 13:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trialActivas.thisTrialN} current_count = {current_count}')
        if trialActivas.thisTrialN == 13:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trialActivas.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 16 (span 10)
        #elif trial_PR.thisTrialN == 15:
        #    continueRoutine = False
  Routine post_recallActivas
    TextComponent postrecallPR_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_endtask_2
      Code Type = Auto->JS
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      End Routine:
        if parar_el_trial:
            trialActivas.finished = True
  Routine LickertActivas
    TextComponent Dificultad_activas
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste esta tarea, en general?
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    SliderComponent dif_licker_2
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine LickertPasivas
    TextComponent Dificultad_pasivas
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste esta tarea, en general?
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    SliderComponent dif_licker
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine ffix_trainactivas
    TextComponent firsfixtrain_activa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time_train
      text [set every repeat] = +
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  Routine Recall_pasivas
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    KeyboardComponent answ_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent screen_text_pas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $screen_text
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    CodeComponent correct_counter
      Code Type = Auto->JS
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      Begin Experiment:
        #counters of correct answers
        previous_count = 0
        current_count = 0
      Begin Routine:
        screen_text = ''
        larespuesta = ''
        answer_Pasive=int(answer)
      Each Frame:
        screen_text = ''.join(answ_key.keys)

        if ("return" in answ_key.keys): #end routine when return is typed
            answ_key.keys.remove("return") #deletes return from answer
            larespuesta = ''.join(map(str,answ_key.keys)) #turn list into string
            print(larespuesta)
            if larespuesta == str(answer_Pasive): #if correct
                correct = 1
            else:
                correct = 0
            thisExp.addData('correct', correct)
            thisExp.addData("recall", larespuesta)
            continueRoutine = False #ends routine
      End Routine:
        ###trial 1 or 2 (span 3)
        if  trial_Pasiva.thisTrialN == 0 or trial_Pasiva.thisTrialN == 1:
            if correct == 1: #if trial 1
                previous_count += 1
                print(f' trial = {trial_Pasiva.thisTrialN} previous_count = {previous_count}')

        ###trial 3 or 4 (span 4)
        elif trial_Pasiva.thisTrialN == 2 or trial_Pasiva.thisTrialN == 3:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_Pasiva.thisTrialN} current_count = {current_count}')
        if trial_Pasiva.thisTrialN == 3:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'trial = {trial_Pasiva.thisTrialN} parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_Pasiva.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 5 or 6 (span 5)
        elif trial_Pasiva.thisTrialN == 4 or trial_Pasiva.thisTrialN == 5:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_Pasiva.thisTrialN} current_count = {current_count}')
        if trial_Pasiva.thisTrialN == 5:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_Pasiva.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 7 or 8 (span 6)
        elif trial_Pasiva.thisTrialN == 6 or trial_Pasiva.thisTrialN == 7:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_Pasiva.thisTrialN} current_count = {current_count}')
        if trial_Pasiva.thisTrialN == 7:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_Pasiva.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 9 or 10 (span 7)
        elif trial_Pasiva.thisTrialN == 8 or trial_Pasiva.thisTrialN == 9:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_Pasiva.thisTrialN} current_count = {current_count}')
        if trial_Pasiva.thisTrialN == 9:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_Pasiva.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 11 or 12 (span 8)
        elif trial_Pasiva.thisTrialN == 10 or trial_Pasiva.thisTrialN == 11:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_Pasiva.thisTrialN} current_count = {current_count}')
        if trial_Pasiva.thisTrialN == 11:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_Pasiva.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 13 or 14 (span 9)
        elif trial_Pasiva.thisTrialN == 12 or trial_Pasiva.thisTrialN == 13:
            if correct == 1:
                current_count +=1 #else (if incorrect, do nothing)
                print(f' trial = {trial_Pasiva.thisTrialN} current_count = {current_count}')
        if trial_Pasiva.thisTrialN == 13:
            if current_count == 0 and previous_count == 0: #if 4 mistakes ends routine
                parar_el_trial = True
                print(f'parar_el_trial = {parar_el_trial}')
            else: #if at least one correct, continue routine, and reset counters
                previous_count = current_count #previous count equals corrects at trials 3 and 4
                current_count = 0
            print(f' trial = {trial_Pasiva.thisTrialN} previous_count = {previous_count} current_count = {current_count} parar_el_trial = {parar_el_trial}')

        ###trial 16 (span 10)
        #elif trial_PR.thisTrialN == 15:
        #    continueRoutine = False
  Routine drift_press_activas
    SoundComponent start_trainPR_2
      saveStartStop = False
      sound = datasets/trial_init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent drift_trainPR_2
      image = datasets/drift.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent firstfix_activas
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text = +
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Presentation_pas
    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $str(digits)[digitLoop_Pasivas.thisN]
  Routine Bienvenida2
    TextComponent bienv2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Este experimento consta de 4 tareas cortas.
        En cada tarea, verás una serie de números que debes recordar.

        A continuación, verás las instrucciones de la primera tarea.

        *Presiona la barra espaciadora para seguir*
    KeyboardComponent key_bienv
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
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  Routine Final
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        ¡Hemos terminado!

        ¡Muchas gracias por tu participación!
  Routine post_recallPasiva
    TextComponent postrecallPR
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_endtask
      Code Type = Auto->JS
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      End Routine:
        if parar_el_trial:
            trial_Pasiva.finished = True
  Routine Midde_blocks
    TextComponent mitad_bloques
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Llevas 2 de 4 tareas
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    KeyboardComponent continuetrial_pasivas
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      pos = (-1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text =  *Presiona la barra espaciadora para continuar con la siguiente*
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  Routine EndTask
    TextComponent siguiente_tarea
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Esta tarea terminó.
        * Presiona la barra para continuar con la siguiente*
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
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Flow
  Routine Bienvenida
  Routine Bienvenida2
  LoopInitiator Block_Order loopType="TrialHandler"
    Selected rows = $lasfilas
    conditionsFile = datasets/task_order.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('nRepsBlockPasivas', 0), ('nRepsBlockActivas', 2)]),
      OrderedDict([('nRepsBlockPasivas', 2), ('nRepsBlockActivas', 0)]),
      OrderedDict([('nRepsBlockPasivas', 0), ('nRepsBlockActivas', 2)])]
    LoopInitiator BlockPasivas loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = nRepsBlockPasivas
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      LoopInitiator instrucloop_Pasivas loopType="TrialHandler"
        conditionsFile = datasets/instructions.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('instrucciones_pasiva', 'datasets/instruccion1_pasiva.png'), ('instrucciones_activa', 'datasets/instruccion1_activa.png')]),
          OrderedDict([('instrucciones_pasiva', 'datasets/instruccion2.png'), ('instrucciones_activa', 'datasets/instruccion2.png')]),
          OrderedDict([('instrucciones_pasiva', 'datasets/instruccion3.png'), ('instrucciones_activa', 'datasets/instruccion3.png')])]
        Routine InstruccionesPasiva
      LoopTerminator instrucloop_Pasivas
      LoopInitiator trial_trainingPasivas loopType="TrialHandler"
        conditionsFile = $"datasets/training_"+ordenpasivas[BlockPasivas.thisN]+".csv"
        loopType = sequential
        nReps = 1
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        Routine firstfix_training
        LoopInitiator train_digitloopPasivas loopType="TrialHandler"
          loopType = sequential
          nReps = digitSpan_train
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          Routine presentation_training
        LoopTerminator train_digitloopPasivas
        Routine recall_training
        Routine post_recall_train
      LoopTerminator trial_trainingPasivas
      Routine start_trial
      LoopInitiator trial_Pasiva loopType="TrialHandler"
        conditionsFile = $"datasets/Dataset_"+ordenpasivas[BlockPasivas.thisN]+".csv"
        loopType = sequential
        nReps = 1
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        Routine first_fixation
        LoopInitiator digitLoop_Pasivas loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = digitSpan
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          Routine Presentation_pas
        LoopTerminator digitLoop_Pasivas
        Routine Recall_pasivas
        Routine post_recallPasiva
      LoopTerminator trial_Pasiva
      Routine LickertPasivas
      Routine EndTask
    LoopTerminator BlockPasivas
    LoopInitiator BlockActivas loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = nRepsBlockActivas
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      LoopInitiator intrLoopActivas loopType="TrialHandler"
        conditionsFile = datasets/instructions.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('instrucciones_pasiva', 'datasets/instruccion1_pasiva.png'), ('instrucciones_activa', 'datasets/instruccion1_activa.png')]),
          OrderedDict([('instrucciones_pasiva', 'datasets/instruccion2.png'), ('instrucciones_activa', 'datasets/instruccion2.png')]),
          OrderedDict([('instrucciones_pasiva', 'datasets/instruccion3.png'), ('instrucciones_activa', 'datasets/instruccion3.png')])]
        Routine Instr_Activas
      LoopTerminator intrLoopActivas
      LoopInitiator trial_train_Activas loopType="TrialHandler"
        conditionsFile = $"datasets/training_"+ordenactivas[BlockActivas.thisN]+".csv"
        loopType = sequential
        nReps = 1
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        Routine drift_press_activas
        Routine ffix_trainactivas
        LoopInitiator train_digitloop_Activas loopType="TrialHandler"
          loopType = sequential
          nReps = digitSpan_train
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          Routine present_train_activas
        LoopTerminator train_digitloop_Activas
        Routine recall_train_activas
        Routine post_recall_train_activas
      LoopTerminator trial_train_Activas
      Routine start_trialActivas
      LoopInitiator trialActivas loopType="TrialHandler"
        conditionsFile = $"datasets/Dataset_"+ordenactivas[BlockActivas.thisN]+".csv"
        loopType = sequential
        nReps = 1
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        Routine drift_press_activas
        Routine first_fixActivas
        LoopInitiator digitLoop_Activas loopType="TrialHandler"
          loopType = sequential
          nReps = digitSpan
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          Routine PresentationActivas
        LoopTerminator digitLoop_Activas
        Routine RecallActivas
        Routine post_recallActivas
      LoopTerminator trialActivas
      Routine LickertActivas
      Routine EndTask
    LoopTerminator BlockActivas
  LoopTerminator Block_Order
  Routine Final
