PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MyTestTask
  keyboardBackend = ioHub
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Routines
  Routine IntroText
    TextComponent Introtext
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenid@s

        Presiona la barra espaciadora para avanzar a la siguiente página
    KeyboardComponent avanzar_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Encoding
    ImageComponent encodingimage
      image [set every repeat] = $animalimage
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    SoundComponent encodingaudio
      saveStartStop = False
      sound [set every repeat] = $questionaudio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    TextComponent text
      letterHeight = 0.08
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $animalname
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  Routine FactTest
    ImageComponent fact_test_image
      image [set every repeat] = $animalimage
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent question_test
      letterHeight = 0.06
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent Alternativas
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $lettera + choicea + '\n' + letterb + choiceb
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    KeyboardComponent fact_response
      allowedKeys = 'a','b'
      correctAns = $correctanswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine SourceTest
    TextComponent sourcetext
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Did a male or female voice tell you this fact?

        a. Male
        b. Female
    KeyboardComponent sourceresponse
      allowedKeys [set every repeat] = 'a','b'
      correctAns = $sourceanswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine QuitExperiment
    TextComponent quit_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press the space bar to quit
    KeyboardComponent quit_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine IntroText
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = semepistim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'Mammal'), ('animalname', 'Polar Bear'), ('source', 'male'), ('sourceanswer', 'a'), ('animalimage', 'polarbear.jpg'), ('fact', 'Polar bears can smell a seal breathing hole in the ice from one kilometer away.'), ('questionaudio', 'polarbear.aiff'), ('question', 'What can a polar bear smell from one kilometer away?'), ('lettera', 'a. '), ('choicea', 'A seal breathing hole'), ('letterb', 'b. '), ('choiceb', 'An elk carcass'), ('correctanswer', 'a')]),
      OrderedDict([('type', 'Bird'), ('animalname', 'Toucan'), ('source', 'female'), ('sourceanswer', 'b'), ('animalimage', 'toucan.jpg'), ('fact', 'Toucans regulate their body temperature by adjusting bloodflow to their beaks.'), ('questionaudio', 'toucan.aiff'), ('question', 'How do toucans regulate their body temperature?'), ('lettera', 'a. '), ('choicea', 'Opening their mouths, similar to panting'), ('letterb', 'b. '), ('choiceb', 'Adjusting bloodflow to their beaks'), ('correctanswer', 'b')]),
      OrderedDict([('type', 'Marine animal'), ('animalname', 'Clownfish'), ('source', 'female'), ('sourceanswer', 'b'), ('animalimage', 'clownfish.jpg'), ('fact', 'The largest female clownfish is at the top of its group hierarchy.'), ('questionaudio', 'clownfish.aiff'), ('question', "What clownfish is at the top of its group's hierarchy?"), ('lettera', 'a. '), ('choicea', 'The oldest female'), ('letterb', 'b. '), ('choiceb', 'The largest female'), ('correctanswer', 'b')]),
      OrderedDict([('type', 'Insect'), ('animalname', 'Woolly Bear Caterpillar'), ('source', 'male'), ('sourceanswer', 'a'), ('animalimage', 'woollybearcaterpillar.jpg'), ('fact', 'The woolly bear caterpillar is resistant to freezing.'), ('questionaudio', 'woollybearcaterpillar.aiff'), ('question', 'What are woolly bear caterpillars resistant to?'), ('lettera', 'a. '), ('choicea', 'Freezing'), ('letterb', 'b. '), ('choiceb', 'Overheating'), ('correctanswer', 'a')])]
    Routine Encoding
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = semepistim.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine FactTest
    Routine SourceTest
  LoopTerminator trials_2
  Routine QuitExperiment
