PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DS_Adapt1L
  keyboardBackend = ioHub
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Routines
  Routine Instr
    TextComponent InstrText
      letterHeight = .05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for Participating!

        In this experiment, you will be shown a series of numbers one after the other.
        Please try to remember the numbers so that afterwards, you can type them into the computer

        There are two short tasks - in the forward task you will type the numbers in the same order you saw them
        In the backward task, you will type in the numbers backwards

        Let's get started!
        Press any key to continue
    KeyboardComponent Welcome_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        TotTrial = 0
  Routine routine_Dpres
    CodeComponent code_stop
      Code Type = Py
      Begin Experiment:
        DS_3Corr = 0
        DS_3Incorr = 0
        DS_4Corr = 0
        DS_4Incorr = 0
        DS_5Corr = 0
        DS_5Incorr = 0
        DS_6Corr = 0
        DS_6Incorr = 0
        DS_7Corr = 0
        DS_7Incorr = 0
        DS_8Corr = 0
        DS_8Incorr = 0
        DS_9Corr = 0
        DS_9Incorr = 0
        DS_10Corr = 0
        DS_10Incorr = 0
        DS_11Corr = 0
        DS_11Incorr = 0
        DS_12Corr = 0
        DS_12Incorr = 0
        DS_13Corr = 0
        DS_13Incorr = 0
        DS_14Corr = 0
        DS_14Incorr = 0
        DS_15Corr = 0
        DS_15Incorr = 0
        DS_16Corr = 0
        DS_16Incorr = 0
        TotTrial = 0
      Begin Routine:
        if TotTrial == 0:
            DS = 3
      Each Frame:
        if DS == 3:
            if t >=3.5:
                continueRoutine = False
        elif DS == 4:
            if t >= 4.5:
                continueRoutine = False
        elif DS == 5:
            if t >= 5.5:
                continueRoutine = False
        elif DS == 6:
            if t >= 6.5:
                continueRoutine = False
        elif DS == 7:
            if t >= 7.5:
                continueRoutine = False
        elif DS == 8:
            if t >= 8.5:
                continueRoutine = False
        elif DS == 9:
            if t >= 9.5:
                continueRoutine = False
        elif DS == 10:
            if t >= 10.5:
                continueRoutine = False
        elif DS == 11:
            if t >= 11.5:
                continueRoutine = False
        elif DS == 12:
            if t >= 12.5:
                continueRoutine = False
        elif DS == 13:
            if t >= 13.5:
                continueRoutine = False
        elif DS == 14:
            if t >= 14.5:
                continueRoutine = False
        elif DS == 15:
            if t >= 15.5:
                continueRoutine = False
        elif DS == 16:
            if t >= 16.5:
                continueRoutine = False
      End Routine:
        thisExp.addData("DS", DS)
    TextComponent Seq1
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S1
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    TextComponent Seq2
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S2
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    TextComponent Seq3
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S3
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    TextComponent Seq4
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S4
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    TextComponent Seq5
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S5
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    TextComponent Seq6
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S6
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    TextComponent Seq7
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S7
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    TextComponent Seq8
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S8
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    TextComponent Seq9
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S9
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    TextComponent Seq10
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S10
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    TextComponent Seq11
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S11
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    TextComponent Seq12
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S12
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  Routine routine_Dresp
    TextComponent textType_2
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Please type in the numbers as you saw them, followed by the ENTER button:
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    TextComponent textFeedback_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $screen_text
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    KeyboardComponent key_resp2_2
      allowedKeys = '1','2','3','4','5','6','7','8','9','backspace','return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
      storeCorrect = True
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    CodeComponent codeRecall2
      Code Type = Py
      Begin Experiment:
        wrongAnswer = 0
      Begin Routine:
        screen_text = ''
      Each Frame:
        if("backspace" in key_resp2_2.keys):
            key_resp2_2.keys.remove("backspace")

            if(len(key_resp2_2.keys) > 0):
                key_resp2_2.keys.pop()
        elif("return" in key_resp2_2.keys):
            key_resp2_2.keys.remove("return")

            screen_text = ''.join(key_resp2_2.keys)
            thisExp.addData("recall_resp", screen_text)
            continueRoutine = False

        screen_text = ''.join(key_resp2_2.keys)
      End Routine:
        if DS == 3:
            if key_resp2_2.keys == CorrAns3:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_3Corr += 1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_3Incorr += 1
        elif DS == 4:
            if key_resp2_2.keys == CorrAns4:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_4Corr += 1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_4Incorr +=1
                if wrongAnswer == 2:
                    DS = DS - 1
                    wrongAnswer = 0
        elif DS == 5:
            if key_resp2_2.keys == CorrAns5:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_5Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_5Incorr +=1
                if wrongAnswer == 2:
                    DS = DS - 1
                    wrongAnswer = 0
        elif DS == 6:
            if key_resp2_2.keys == CorrAns6:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_6Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_6Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 7:
            if key_resp2_2.keys == CorrAns7:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_7Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_7Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 8:
            if key_resp2_2.keys == CorrAns8:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_8Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_8Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 9:
            if key_resp2_2.keys == CorrAns9:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_9Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_9Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 10:
            if key_resp2_2.keys == CorrAns10:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_10Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_10Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 11:
            if key_resp2_2.keys == CorrAns11:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_11Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_11Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 12:
            if key_resp2_2.keys == CorrAns12:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_12Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_12Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 13:
            if key_resp2_2.keys == CorrAns13:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_13Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 14:
            if key_resp2_2.keys == CorrAns14:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_14Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_14Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 15:
            if key_resp2_2.keys == CorrAns15:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_15Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_15Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0
        elif DS == 16:
            if key_resp2_2.keys == CorrAns16:
                thisExp.addData("score", 1)
                DS = DS + 1
                TotTrial = TotTrial + 1
                DS_16Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                DS_16Incorr +=1
                if wrongAnswer == 2:
                    DS = DS -1
                    wrongAnswer = 0

        print(DS)
  Routine Goodbye
    TextComponent GB
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6
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      text:
        Thats it!

        Thanks again for participating!

        Please press escape to leave the experiment
    CodeComponent code_calc
      Code Type = Py
      Begin Routine:
        if B_DS_3Corr + B_DS_3Incorr != 0:
            B_Tot3 = B_DS_3Corr + B_DS_3Incorr
            BHR3 = B_DS_3Corr / B_Tot3
        else:
            BHR3 = 0

        if B_DS_4Corr + B_DS_4Incorr != 0:
            B_Tot4 = B_DS_5Corr + B_DS_4Incorr
            BHR4 = B_DS_4Corr / B_Tot4
        else:
            BHR4 = 0

        if B_DS_5Corr + B_DS_5Incorr != 0:
            B_Tot5 = B_DS_5Corr + B_DS_5Incorr
            BHR5 = B_DS_5Corr / B_Tot5
        else:
            BHR5 = 0

        if B_DS_6Corr + B_DS_6Incorr != 0:
            B_Tot6 = B_DS_6Corr + B_DS_6Incorr
            BHR6 = B_DS_6Corr / B_Tot6
        else:
            BHR6 = 0

        if B_DS_7Corr + B_DS_7Incorr != 0:
            B_Tot7 = B_DS_7Corr + B_DS_7Incorr
            BHR7 = B_DS_7Corr / B_Tot7
        else:
            BHR7 = 0

        if B_DS_8Corr + B_DS_8Incorr != 0:
            B_Tot8 = B_DS_8Corr + B_DS_8Incorr
            BHR8 = B_DS_8Corr / B_Tot8
        else:
            BHR8 = 0

        if B_DS_9Corr + B_DS_9Incorr != 0:
            B_Tot9 = B_DS_9Corr + B_DS_9Incorr
            BHR9 = B_DS_9Corr / B_Tot9
        else:
            BHR9 = 0

        if B_DS_10Corr + B_DS_10Incorr != 0:
            B_Tot10 = B_DS_10Corr + B_DS_10Incorr
            BHR10 = B_DS_10Corr / B_Tot10
        else:
            BHR10 = 0

        if B_DS_11Corr + B_DS_11Incorr != 0:
            B_Tot11 = B_DS_11Corr + B_DS_11Incorr
            BHR11 = B_DS_11Corr / B_Tot11
        else:
            BHR11 = 0

        if B_DS_12Corr + B_DS_12Incorr != 0:
            B_Tot12 = B_DS_12Corr + B_DS_12Incorr
            BHR12 = B_DS_12Corr / B_Tot12
        else:
            BHR12 = 0

        if B_DS_13Corr + B_DS_13Incorr != 0:
            B_Tot13 = B_DS_13Corr + B_DS_13Incorr
            BHR13 = B_DS_13Corr / B_Tot13
        else:
            BHR13 = 0

        if B_DS_14Corr + B_DS_14Incorr != 0:
            B_Tot14 = B_DS_14Corr + B_DS_14Incorr
            BHR14 = B_DS_14Corr / B_Tot14
        else:
            BHR14 = 0

        if B_DS_15Corr + B_DS_15Incorr != 0:
            B_Tot15 = B_DS_15Corr + B_DS_15Incorr
            BHR15 = B_DS_15Corr / B_Tot15
        else:
            BHR15 = 0

        if B_DS_16Corr + B_DS_16Incorr != 0:
            B_Tot16 = B_DS_16Corr + B_DS_16Incorr
            BHR16 = B_DS_16Corr / B_Tot16
        else:
            BHR16 = 0


        BDS_score = 2.5+BHR3+BHR4+BHR5+BHR6+BHR7+BHR8+BHR9+BHR10+BHR11+BHR12+BHR13+BHR14+BHR15+BHR16
        thisExp.addData("Backward WM score", BDS_score)
  Routine routine_BackPres
    CodeComponent code_back
      Code Type = Py
      Begin Experiment:
        B_DS_3Corr = 0
        B_DS_3Incorr = 0
        B_DS_4Corr = 0
        B_DS_4Incorr = 0
        B_DS_5Corr = 0
        B_DS_5Incorr = 0
        B_DS_6Corr = 0
        B_DS_6Incorr = 0
        B_DS_7Corr = 0
        B_DS_7Incorr = 0
        B_DS_8Corr = 0
        B_DS_8Incorr = 0
        B_DS_9Corr = 0
        B_DS_9Incorr = 0
        B_DS_10Corr = 0
        B_DS_10Incorr = 0
        B_DS_11Corr = 0
        B_DS_11Incorr = 0
        B_DS_12Corr = 0
        B_DS_12Incorr = 0
        B_DS_13Corr = 0
        B_DS_13Incorr = 0
        B_DS_14Corr = 0
        B_DS_14Incorr = 0
        B_DS_15Corr = 0
        B_DS_15Incorr = 0
        B_DS_16Corr = 0
        B_DS_16Incorr = 0
        B_TotTrial = 0
      Begin Routine:
        if B_TotTrial == 0:
            B_DS = 3
      Each Frame:
        if B_DS == 3:
            if t >=3.5:
                continueRoutine = False
        elif B_DS == 4:
            if t >= 4.5:
                continueRoutine = False
        elif B_DS == 5:
            if t >= 5.5:
                continueRoutine = False
        elif B_DS == 6:
            if t >= 6.5:
                continueRoutine = False
        elif B_DS == 7:
            if t >= 7.5:
                continueRoutine = False
        elif B_DS == 8:
            if t >= 8.5:
                continueRoutine = False
        elif B_DS == 9:
            if t >= 9.5:
                continueRoutine = False
        elif B_DS == 10:
            if t >= 10.5:
                continueRoutine = False
        elif B_DS == 11:
            if t >= 11.5:
                continueRoutine = False
        elif B_DS == 12:
            if t >= 12.5:
                continueRoutine = False
        elif B_DS == 13:
            if t >= 13.5:
                continueRoutine = False
        elif B_DS == 14:
            if t >= 14.5:
                continueRoutine = False
        elif B_DS == 15:
            if t >= 15.5:
                continueRoutine = False
        elif B_DS == 16:
            if t >= 16.5:
                continueRoutine = False
      End Routine:
        thisExp.addData("B_DS", B_DS)
    TextComponent Seq1_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S1
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    TextComponent Seq2_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S2
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    TextComponent Seq3_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S3
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    TextComponent Seq4_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S4
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    TextComponent Seq5_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S5
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    TextComponent Seq6_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S6
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    TextComponent Seq7_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S7
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    TextComponent Seq8_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S8
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    TextComponent Seq9_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S9
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    TextComponent Seq10_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S10
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    TextComponent Seq11_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S11
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    TextComponent Seq12_b
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $S12
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  Routine routine_BackResp
    TextComponent textType_2B
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Please type in the numbers in the reverse order that you saw them, followed by the ENTER button:
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    TextComponent textFeedback_2B
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $screen_text
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    KeyboardComponent key_resp2_2B
      allowedKeys = '1','2','3','4','5','6','7','8','9','backspace','return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
      storeCorrect = True
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    CodeComponent codeRecall2B
      Code Type = Py
      Begin Experiment:
        wrongAnswer = 0
      Begin Routine:
        screen_text = ''
      Each Frame:
        if("backspace" in key_resp2_2B.keys):
            key_resp2_2B.keys.remove("backspace")

            if(len(key_resp2_2B.keys) > 0):
                key_resp2_2B.keys.pop()
        elif("return" in key_resp2_2B.keys):
            key_resp2_2B.keys.remove("return")

            screen_text = ''.join(key_resp2_2B.keys)
            thisExp.addData("recall_resp", screen_text)
            continueRoutine = False

        screen_text = ''.join(key_resp2_2B.keys)
      End Routine:
        if B_DS == 3:
            if key_resp2_2B.keys == CorrAns3:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                B_TotTrial = B_TotTrial + 1
                B_DS_3Corr += 1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                B_TotTrial = B_TotTrial + 1
                B_DS_3Incorr += 1

        elif B_DS == 4:
            if key_resp2_2B.keys == CorrAns4:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                B_TotTrial = B_TotTrial + 1
                B_DS_4Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_4Incorr += 1
                if wrongAnswer == 2:
                    B_DS = B_DS - 1
                    wrongAnswer = 0
        elif B_DS == 5:
            if key_resp2_2B.keys == CorrAns5:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_5Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_5Incorr += 1
                if wrongAnswer == 2:
                    B_DS = B_DS - 1
                    wrongAnswer = 0
        elif B_DS == 6:
            if key_resp2_2B.keys == CorrAns6:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_6Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_6Incorr += 1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 7:
            if key_resp2_2B.keys == CorrAns7:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_7Corr += 1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_7Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 8:
            if key_resp2_2B.keys == CorrAns8:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_8Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_8Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 9:
            if key_resp2_2B.keys == CorrAns9:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_9Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_9Incorr += 1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 10:
            if key_resp2_2B.keys == CorrAns10:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_10Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_10Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 11:
            if key_resp2_2B.keys == CorrAns11:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_11Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_11Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 12:
            if key_resp2_2B.keys == CorrAns12:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_12Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_12Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 13:
            if key_resp2_2B.keys == CorrAns13:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_13Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_13Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 14:
            if key_resp2_2B.keys == CorrAns14:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_14Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_14Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 15:
            if key_resp2_2B.keys == CorrAns15:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_15Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_15Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
        elif B_DS == 16:
            if key_resp2_2B.keys == CorrAns16:
                thisExp.addData("score", 1)
                B_DS = B_DS + 1
                TotTrial = TotTrial + 1
                B_DS_16Corr +=1
                wrongAnswer = 0
            else:
                thisExp.addData("score", 0)
                wrongAnswer = wrongAnswer + 1
                TotTrial = TotTrial + 1
                B_DS_16Incorr +=1
                if wrongAnswer == 2:
                    B_DS = B_DS -1
                    wrongAnswer = 0
  Routine InstrBack
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        wrongAns = 0

        if DS_3Corr + DS_3Incorr != 0:
            Tot3 = DS_3Corr + DS_3Incorr
            HR3 = DS_3Corr / Tot3
        else:
            HR3 = 0

        if DS_4Corr + DS_4Incorr != 0:
            Tot4 = DS_4Corr + DS_4Incorr
            HR4 = DS_4Corr / Tot4
        else:
            HR4 = 0

        if DS_5Corr + DS_5Incorr != 0:
            Tot5 = DS_5Corr + DS_5Incorr
            HR5 = DS_5Corr / Tot5
        else:
            HR5 = 0

        if DS_6Corr + DS_6Incorr != 0:
            Tot6 = DS_6Corr + DS_6Incorr
            HR6 = DS_6Corr / Tot6
        else:
            HR6 = 0

        if DS_7Corr + DS_7Incorr != 0:
            Tot7 = DS_7Corr + DS_7Incorr
            HR7 = DS_7Corr / Tot7
        else:
            HR7 = 0

        if DS_8Corr + DS_8Incorr != 0:
            Tot8 = DS_8Corr + DS_8Incorr
            HR8 = DS_8Corr / Tot8
        else:
            HR8 = 0

        if DS_9Corr + DS_9Incorr != 0:
            Tot9 = DS_9Corr + DS_9Incorr
            HR9 = DS_9Corr / Tot9
        else:
            HR9 = 0

        if DS_10Corr + DS_10Incorr != 0:
            Tot10 = DS_10Corr + DS_10Incorr
            HR10 = DS_10Corr / Tot10
        else:
            HR10 = 0

        if DS_11Corr + DS_11Incorr != 0:
            Tot11 = DS_11Corr + DS_11Incorr
            HR11 = DS_11Corr / Tot11
        else:
            HR11 = 0

        if DS_12Corr + DS_12Incorr != 0:
            Tot12 = DS_12Corr + DS_12Incorr
            HR12 = DS_12Corr / Tot12
        else:
            HR12 = 0

        if DS_13Corr + DS_13Incorr != 0:
            Tot13 = DS_13Corr + DS_13Incorr
            HR13 = DS_13Corr / Tot13
        else:
            HR13 = 0

        if DS_14Corr + DS_14Incorr != 0:
            Tot14 = DS_14Corr + DS_14Incorr
            HR14 = DS_14Corr / Tot14
        else:
            HR14 = 0

        if DS_15Corr + DS_15Incorr != 0:
            Tot15 = DS_15Corr + DS_15Incorr
            HR15 = DS_15Corr / Tot15
        else:
            HR15 = 0

        if DS_16Corr + DS_16Incorr != 0:
            Tot16 = DS_16Corr + DS_16Incorr
            HR16 = DS_16Corr / Tot16
        else:
            HR16 = 0


        FDS_score = 2.5+HR3+HR4+HR5+HR6+HR7+HR8+HR9+HR10+HR11+HR12+HR13+HR14+HR15+HR16
        thisExp.addData("Forward WM score", FDS_score)
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Now, you will do the same thing, but type in the number in the REVERSE order.

        For example, if you are presented with
        [1, 2, 3]
        you would type in
        [3, 2, 1]

        Press any key to start the next round
    KeyboardComponent key_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine InstrForward
    TextComponent text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We will start with the FORWARD task

        A series of numbers will be shown on the screen, please try to remember them.
        You will then type them into the computer in the same order as they appeared.

        If you get it CORRECT, the following round will be one digit LONGER.
        If you get it INCORRECT, the following round will be the same length.
        After 2 incorrect responses, the following round will be one digit SHORTER.

        You will do this for a total of 14 rounds

        If you are ready, press any key to do one trial round

        Good luck!
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine routine_round
    TextComponent text_3
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $trials.thisRepN+1
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    TextComponent text_4
      letterHeight = 0.1
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = ROUND
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press "SPACE" to continue
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine routine_presTrial
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        Ptrial = 0
      Each Frame:
        if Ptrial == 0:
            if t >=3.4:
                continueRoutine = False
    TextComponent seq1_tr
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent Seq2_tr
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Seq3_tr
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Seq4_tr
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text = 4
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  Routine routine_RespTrial
    TextComponent textType
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Please type in the numbers as you saw them, followed by the ENTER button:
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    TextComponent textFeedback
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $screen_text
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3','4','5','6','7','8','9','backspace','return'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        screen_text = ''
      Each Frame:
        if("backspace" in key_resp_4.keys):
            key_resp_4.keys.remove("backspace")

            if(len(key_resp_4.keys) > 0):
                key_resp_4.keys.pop()
        elif("return" in key_resp_4.keys):
            key_resp_4.keys.remove("return")

            screen_text = ''.join(key_resp_4.keys)
            thisExp.addData("recall_resp", screen_text)
            continueRoutine = False

        screen_text = ''.join(key_resp_4.keys)
      End Routine:
        if screen_text == "123":
            Ptrial = Ptrial + 1
  Routine routine_go
    TextComponent text_go
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
        That's it!

        Let's start doing the actual task.

        Press "space" to start
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine routine_roundTrial
    TextComponent text_6
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trials_2.thisRepN +1
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    TextComponent text_7
      letterHeight = 0.1
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TRIAL ROUND
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press "Space"  to continue
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine routine_round_2
    TextComponent text_9
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $trials_3.thisTrialN +1
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    TextComponent text_10
      letterHeight = 0.1
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = ROUND
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Press "SPACE" to continue
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine Instr
  Routine InstrForward
  LoopInitiator trials_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine routine_roundTrial
    Routine routine_presTrial
    Routine routine_RespTrial
  LoopTerminator trials_2
  Routine routine_go
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Digit_span.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('S1', 8), ('S2', 1), ('S3', 6), ('S4', 0), ('S5', 0), ('S6', 0), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['8', '1', '6']), ('CorrAns4', None), ('CorrAns5', None), ('CorrAns6', None), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None), ('recall_resp', None), ('score', None)]),
      OrderedDict([('S1', 4), ('S2', 7), ('S3', 2), ('S4', 9), ('S5', 0), ('S6', 0), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['4', '7', '2']), ('CorrAns4', ['4', '7', '2', '9']), ('CorrAns5', None), ('CorrAns6', None), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None), ('recall_resp', None), ('score', None)]),
      OrderedDict([('S1', 6), ('S2', 9), ('S3', 1), ('S4', 7), ('S5', 2), ('S6', 0), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['6', '9', '1']), ('CorrAns4', ['6', '9', '1', '7']), ('CorrAns5', ['6', '9', '1', '7', '2']), ('CorrAns6', None), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None), ('recall_resp', None), ('score', None)]),
      OrderedDict([('S1', 7), ('S2', 9), ('S3', 4), ('S4', 1), ('S5', 8), ('S6', 2), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['7', '9', '4']), ('CorrAns4', ['7', '9', '4', '1']), ('CorrAns5', ['7', '9', '4', '1', '8']), ('CorrAns6', ['7', '9', '4', '1', '8', '2']), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None), ('recall_resp', None), ('score', None)])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
    Routine routine_round
    Routine routine_Dpres
    Routine routine_Dresp
  LoopTerminator trials
  Routine InstrBack
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = back_digit_span.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('S1', 1), ('S2', 5), ('S3', 9), ('S4', 0), ('S5', 0), ('S6', 0), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['9', '5', '1']), ('CorrAns4', None), ('CorrAns5', None), ('CorrAns6', None), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None)]),
      OrderedDict([('S1', 4), ('S2', 7), ('S3', 3), ('S4', 8), ('S5', 0), ('S6', 0), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['3', '7', '4']), ('CorrAns4', ['8', '3', '7', '4']), ('CorrAns5', None), ('CorrAns6', None), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None)]),
      OrderedDict([('S1', 2), ('S2', 6), ('S3', 1), ('S4', 7), ('S5', 3), ('S6', 0), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['1', '6', '2']), ('CorrAns4', ['7', '1', '6', '2']), ('CorrAns5', ['3', '7', '1', '6', '2']), ('CorrAns6', None), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None)]),
      OrderedDict([('S1', 6), ('S2', 1), ('S3', 5), ('S4', 9), ('S5', 4), ('S6', 8), ('S7', 0), ('S8', 0), ('S9', 0), ('S10', 0), ('S11', 0), ('S12', 0), ('S13', 0), ('S14', 0), ('S15', 0), ('S16', 0), ('CorrAns3', ['5', '1', '6']), ('CorrAns4', ['9', '5', '1', '6']), ('CorrAns5', ['4', '9', '5', '1', '6']), ('CorrAns6', ['8', '4', '9', '5', '1', '6']), ('CorrAns7', None), ('CorrAns8', None), ('CorrAns9', None), ('CorrAns10', None), ('CorrAns11', None), ('CorrAns12', None), ('CorrAns13', None), ('CorrAns14', None), ('CorrAns15', None), ('CorrAns16', None)])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
    Routine routine_round_2
    Routine routine_BackPres
    Routine routine_BackResp
  LoopTerminator trials_3
  Routine Goodbye
