PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = DigitSpanTask_fwdback
  keyboardBackend = ioHub
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Routines
  Routine Presentation
    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Respuesta:
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button_next
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -5)
      saveStartStop = False
      size = (8,1.5)
      startVal [time (s)] = 0
      text = Siguiente
      units = cm
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if textbox.text == str(digits):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        El experimento terminó.
        ¡Gracias por participar!
  Routine firs_fixation
    TextComponent firs_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_time
      text [set every repeat] = +
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  Routine Lickert
    TextComponent Dificultad
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ¿Cuán difícil encontraste la tarea en general?
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    SliderComponent dif_licker
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 0.2941, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('muy fácil', 'fácil', 'neutro', 'difícil', 'muy difícil')
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine Bienvenida
    TextComponent Bienvenida_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@!

        Gracias por participar en nuestro estudio.

        Presiona "barra espaciadora" para ver las instrucciones
    KeyboardComponent key_bienvenida
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Instrucciones
    ImageComponent image
      image = instruccion1_pasiva_BACK.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Bienvenida
  Routine Instrucciones
  LoopInitiator trial_PF loopType="TrialHandler"
    conditionsFile = Dataset_PF.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan': 3, 'digits': 489, 'fixation_time': 0.55},
      {'digitSpan': 3, 'digits': 235, 'fixation_time': 0.55},
      {'digitSpan': 4, 'digits': 6810, 'fixation_time': 0.55},
      {'digitSpan': 4, 'digits': 3168, 'fixation_time': 0.55},
      {'digitSpan': 5, 'digits': 81423, 'fixation_time': 0.55},
      {'digitSpan': 5, 'digits': 90736, 'fixation_time': 0.55},
      {'digitSpan': 6, 'digits': 153624, 'fixation_time': 0.55},
      {'digitSpan': 6, 'digits': 819703, 'fixation_time': 0.55},
      {'digitSpan': 7, 'digits': 1026597, 'fixation_time': 0.55},
      {'digitSpan': 7, 'digits': 8765312, 'fixation_time': 0.55},
      {'digitSpan': 8, 'digits': 93261458, 'fixation_time': 0.55},
      {'digitSpan': 8, 'digits': 50914738, 'fixation_time': 0.55},
      {'digitSpan': 9, 'digits': 431962507, 'fixation_time': 0.55},
      {'digitSpan': 9, 'digits': 901852346, 'fixation_time': 0.55},
      {'digitSpan': 10, 'digits': 1946738052, 'fixation_time': 0.55},
      {'digitSpan': 10, 'digits': 4127509683, 'fixation_time': 0.55}]
    Routine firs_fixation
    LoopInitiator digitLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Presentation
    LoopTerminator digitLoop
    Routine Recall
  LoopTerminator trial_PF
  Routine Lickert
  Routine End
